"""
SeeAlso: hh_cond_exp_traub
"""
neuron traub_psc_alpha:
  state:
    r integer # number of steps in the current refractory phase
  end

  initial_values:
    V_m mV = -70. mV # Membrane potential

    function alpha_n_init real = 0.032 * (V_m / mV + 52.) / (1. - exp(-(V_m / mV + 52.) / 5.))     
    function beta_n_init  real = 0.5 * exp(-(V_m / mV + 57.) / 40.)    
    function alpha_m_init real = 0.32 * (V_m / mV + 54.) / (1.0 - exp(-(V_m / mV + 54.) / 4.))   
    function beta_m_init  real = 0.28 * (V_m / mV + 27.) / (exp((V_m / mV + 27.) / 5.) - 1.)    
    function alpha_h_init real = 0.128 * exp(-(V_m / mV + 50.0) / 18.0)
    function beta_h_init  real = 4.0 / (1.0 + exp(-(V_m / mV + 27.) / 5.))

    Act_m real =  alpha_m_init / ( alpha_m_init + beta_m_init )   # Activation variable m for Na
    Inact_h real = alpha_h_init / ( alpha_h_init + beta_h_init )    # Inactivation variable h for Na
    Act_n real =  alpha_n_init / ( alpha_n_init + beta_n_init ) # Activation variable n for K
  end

  equations:
    # synapses: alpha functions
    shape I_syn_in = (e/tau_syn_in) * t * exp(-t/tau_syn_in)
    shape I_syn_ex = (e/tau_syn_ex) * t * exp(-t/tau_syn_ex)

    function I_syn_exc pA = convolve(I_syn_ex, spikeExc)
    function I_syn_inh pA = convolve(I_syn_in, spikeInh)
    function I_Na  pA = g_Na * Act_m * Act_m * Act_m * Inact_h * ( V_m - E_Na )
    function I_K   pA  = g_K * Act_n * Act_n * Act_n * Act_n * ( V_m - E_K )
    function I_L   pA = g_L * ( V_m - E_L )
    V_m' =( -( I_Na + I_K + I_L ) + I_e + I_stim + I_syn_inh + I_syn_exc ) / C_m

    # Act_n
    function alpha_n real = 0.032 * (V_m / mV + 52.) / (1. - exp(-(V_m / mV + 52.) / 5.))
    function beta_n  real = 0.5 * exp(-(V_m / mV + 57.) / 40.)
    Act_n' = ( alpha_n * ( 1 - Act_n ) - beta_n * Act_n ) / ms # n-variable

    # Act_m
    function alpha_m real = 0.32 * (V_m / mV + 54.) / (1.0 - exp(-(V_m / mV + 54.) / 4.))
    function beta_m  real = 0.28 * (V_m / mV + 27.) / (exp((V_m / mV + 27.) / 5.) - 1.)
    Act_m' = ( alpha_m * ( 1 - Act_m ) - beta_m * Act_m ) / ms # m-variable

    # Inact_h'
    function alpha_h real = 0.128 * exp(-(V_m / mV + 50.0) / 18.0)
    function beta_h  real = 4.0 / (1.0 + exp(-(V_m / mV + 27.) / 5.))
    Inact_h' = ( alpha_h * ( 1 - Inact_h ) - beta_h * Inact_h ) / ms # h-variable
  end

  parameters:
    t_ref ms = 2.0 ms      # Refractory period 2.0
    g_Na nS = 10000.0 nS    # Sodium peak conductance
    g_K nS = 8000.0 nS      # Potassium peak conductance
    g_L nS = 10 nS          # Leak conductance
    C_m pF = 100.0 pF       # Membrane Capacitance
    E_Na mV = 50. mV         # Sodium reversal potential
    E_K mV = -100. mV        # Potassium reversal potentia
    E_L mV = -67. mV     # Leak reversal Potential (aka resting potential)
    V_Tr mV = -20. mV        # Spike Threshold
    tau_syn_ex ms = 0.2 ms  # Rise time of the excitatory synaptic alpha function i
    tau_syn_in ms = 2. ms  # Rise time of the inhibitory synaptic alpha function

    # constant external input current
    I_e pA = 0 pA
  end

  internals:
    RefractoryCounts integer = steps(t_ref) # refractory time in steps
  end

  input:
    spikeInh pA <- inhibitory spike
    spikeExc pA <- excitatory spike
    I_stim pA <- current
  end

  output: spike

  update:
    U_old mV = V_m
    integrate_odes()
    # sending spikes: crossing 0 mV, pseudo-refractoriness and local maximum...
    if r > 0: # is refractory?
      r -= 1
    elif V_m > V_Tr and U_old > V_Tr: # threshold && maximum
      r = RefractoryCounts
      emit_spike()
    end

  end

end


